PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = LieDetection
  eyetracker = Tobii Technology
  tbLicenseFile = ANQN0-I0J00-G4HJK-M8P1F-1S1Y7-3G5BU-CDRW
  tbModel = Tobii Pro Nano
  tbSampleRate = 60
  tbSerialNo = TPNA1-030241945524
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Routines
  Routine Start
    TextComponent text
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Wellcome!

        This is an experiement about lie detection.

        Press 'space' to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent eye_tracking_code
      Code Type = Auto->JS
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      Before Experiment:
        import tobii_research as tr

        from datetime import datetime as dt
        import xlsxwriter as xl


        #uniform timestamp for document name
        time_stamp = dt.utcnow()
        exp_time = str(time_stamp)[0:10] + '_' + str(time_stamp)[11:13] + str(time_stamp)[14:16]

        # finding the eyetracker
        eye_tracker = tr.find_all_eyetrackers()[0]

        global_gaze_data = None
        bs_diameter = 0

        def gaze_data_callback(gaze_data):
            global global_gaze_data
            global_gaze_data = gaze_data
            print(global_gaze_data.right_eye.EyeData.pupil.diameter)

        # start eyetracking
        eye_tracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)

        # list for storing data
        eye_measures = []
        #time_stamps = []

        option = ''
        mode = ''
      Begin Experiment:
        user = expInfo['participant']
  Routine Baseline
    TextComponent fixation_cross
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent eye_tracking_code2
      Code Type = Auto->JS
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      Each Frame:
        # eyetracking, append baseline measures with new pupil diameter
        if(global_gaze_data != None):
            #print(global_gaze_data.get('left_pupil_diameter'))
            eye_measures.append(global_gaze_data.get('left_pupil_diameter'))
            #time_stamps.append(dt.utcnow())
            #print(global_gaze_data.get('left_pupil_diameter'))
            baseline_s.append('b')
            key_s.append('')
            id_s.append('')
            correct_s.append('')
  Routine NumberTest
    TextComponent question_1
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Is the displayed number greater than 10?
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    TextComponent press_key
      languageStyle = RTL
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = "←" No         Yes "→" 
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    TextComponent num_test
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent number_genertion
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        # generate a random number to be displayed which is not 10
        #num = 10
        corResp = ''
        #while num == 10:
        #    num = random.randint(0,20)

        # select number from list generated in the introduction
        num = numbers_rand[trials_num.thisN]

        # write generated number to data
        thisExp.addData('num_test.value', num)

        # generate correct response (always truth)
        if num > 10:
            corResp = 'right'
        else:
            corResp = 'left'

        num_test.text = str(num)
      End Routine:
        # if trials max is 20 end early
        if trials_num.thisN >= (trials_limit-1):
            trials_num.finished = True
    PolygonComponent timer_line
      fillColor = white
      lineWidth = 10
      pos = (0, -0.35)
      saveStartStop = False
      shape = line
      size = (1,0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent timer
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        #import sys
        from psychopy import event
      Begin Routine:
        # configure visual timer
        t = 5

        #timer = core.Clock()
        #timer.add(t)

        #timer = core.CountdownTimer(t)

        # size of line
        timer_line.size = [1,0.02]
        width = timer_line.size[0]

        # how much the line shrinks each frame
        dist = width/(30*t)
        timer_line.autoDraw= False
      Each Frame:
        #if timer.getTime() > 0 and continueRoutine:
        # adjust line size to visualize time
        width -= dist
        timer_line.size = [width,0.02]
        timer_line.draw()
        win.flip()

        # check if response was given
        """
            keys = event.getKeys()
            if keys:
                if 'right' in keys:
                    rt = arrow_response.rt
                    print(rt)
                    continueRoutine = False
                if 'left' in keys:
                    rt = arrow_response.rt
                    print(rt)
                    continueRoutine = False
        """
      End Routine:
        #rt = arrow_response.rt
        #print(rt)
        #event.clearEvents()
    KeyboardComponent arrow_response
      allowedKeys = 'left','right'
      correctAns = $corResp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5.0
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent eyecode_2
      Code Type = Auto->JS
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      Each Frame:
        # eyetracking, append baseline measures with new pupil diameter
        if(global_gaze_data != None):
            #print(global_gaze_data.get('left_pupil_diameter'))
            eye_measures.append(global_gaze_data.get('left_pupil_diameter'))
            #time_stamps.append(dt.utcnow())
            #print(global_gaze_data.get('left_pupil_diameter'))
            baseline_s.append('')


            if arrow_response.keys:
                correct_s.append(arrow_response.corr)
                key_s.append(arrow_response.keys)
            else:
                correct_s.append('')
                key_s.append('')

            id_s.append(num)
      End Routine:
        #baseline_s = []
        #eye_measures = []
        keys = arrow_response.keys
        print('key')
        print(keys)
        """
        if keys:
            if 'right' in keys:
                key_s.append('right')
                correct_s.append(corResp)
            if 'left' in keys:
                key_s.append('left')
                correct_s.append(corResp)
        else:
            key_s.append('k')
            correct_s.append('k') """
        #key_s.append(keys)
        #correct_s.append(corResp)

        print('K')
        print(key_s)
        print('id')
        print(id_s)
        print('c')
        print(correct_s)
  Routine Instructions
    TextComponent instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the following, you will be asked if the number in the middle is greater than 10.

        Please always lie!

        Press 'space' to start
    KeyboardComponent instructions_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent instructions_code
      Code Type = Auto->JS
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      Begin Experiment:
        # here you can change the order in
        # which they should lie, tell truth or choose

        # lie = 0, truth = 1, choorse = 2

        order = [2, 1, 0]

        # generates list with len 20, 10 ints < 10, 10 ints > 10
        def gen_rand_list():
            # list len 10, random num from 11 to 19
            randomlist_1 = random.sample(range(11, 19), 5)
            randomlist_1.extend(random.sample(range(11, 19), 5))
            #list len 10, random num from 1 to 9
            randomlist_2 = random.sample(range(1, 9), 5)
            randomlist_2.extend(random.sample(range(1, 9), 5))

            randomlist_1.extend(randomlist_2)
            return randomlist_1
      Begin Routine:
        # depending on the oder decided in the beginning
        # edit the displayed text and write to output file
        numbers_rand =[]
        trials_limit = 20
        option = 'number'
        if order[trials_instruct_num.thisN] == 0:
            instructions_text.text  = "In the following, you will be asked if the number in the middle is greater than 10.\n \nPlease always lie! \n \nPress 'space' to start"
            thisExp.addData('numbers.instructions', 'lie')
            mode = 'lie'
            numbers_rand = gen_rand_list()
        if order[trials_instruct_num.thisN] == 1:
            instructions_text.text  = "In the following, you will be asked if the number in the middle is greater than 10.\n \nPlease always tell the truth! \n \nPress 'space' to start"
            thisExp.addData('numbers.instructions', 'truth')
            numbers_rand = gen_rand_list()
            mode = 'truth'
        if order[trials_instruct_num.thisN] == 2:
            instructions_text.text  = "In the following, you will be asked if the number in the middle is greater than 10.\n \nYou can choose to lie or tell the truth! \n \nPress 'space' to start"
            thisExp.addData('numbers.instructions', 'choice')
            numbers_rand = gen_rand_list()
            numbers_rand. extend(gen_rand_list())
            trials_limit = 40
            mode = 'choice'

        # randomize numbers
        random.shuffle(numbers_rand)
        print(numbers_rand)
    CodeComponent eyecode
      Code Type = Auto->JS
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      Begin Routine:
        # some datastorages

        baseline_s = []
        eye_measures = []
        key_s = []
        id_s = []
        correct_s = []
  Routine Instructions_Quest
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent instructions_text2
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_quest
      Code Type = Auto->JS
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      Before Experiment:
        import csv
        # function to read in csv files
        def read_csv(filename, delim):
            questions = []
            with open(filename) as csv_file:
                csv_reader = csv.reader(csv_file, delimiter=delim)
                line_count = 0
                for row in csv_reader:
                    if line_count == 0:
                        line_count += 1
                    else:
                        questions.append([int(row[0]),str(row[1])])
                        line_count += 1
            return questions
      Begin Experiment:
        # here you can change the order in
        # which they should lie, tell truth or choose

        # lie = 0, truth = 1, choorse = 2

        order = [2, 1, 0]

        # read in the csv for questions and randomize order of questions
        questions = []

        questions_emo = read_csv('Question_emotional.csv', ',')
        questions_neu = read_csv('Question_neutral.csv', ';')

        # pick questions for lie and truth
        #pick_emo = pick_quest()
        #pick_neu = pick_quest()
        # shuffle questions and then pick first 10 from each for lie
        # and last 10 for truth
        random.shuffle(questions_emo)
        random.shuffle(questions_neu)

        questions_lie = questions_emo[0:10]
        questions_lie.extend(questions_neu[0:10])

        questions_truth = questions_emo[10:20]
        questions_truth.extend(questions_neu[10:20])

        questions_choice = questions_emo.copy()
        questions_choice.extend(questions_neu[:])

        print('lie')
        print(len(questions_lie))
        print('truth')
        print(len(questions_truth))
        print('chioce')
        print(len(questions_choice))
      Begin Routine:
        # depending on the oder decided in the beginning
        # edit the displayed text and write to output file

        option = 'questions'
        trials_limit = 20
        if order[trials_instruct_quest.thisN] == 0:
            instructions_text2.text  = "In the following, you will be asked personal questions.\n \nPlease always lie! \n \nPress 'space' to start"
            thisExp.addData('questions.instructions', 'lie')
            questions = questions_lie.copy()
            mode = 'lie'
        if order[trials_instruct_quest.thisN] == 1:
            instructions_text2.text  = "In the following, you will be asked personal questions.\n \nPlease always tell the truth! \n \nPress 'space' to start"
            thisExp.addData('questions.instructions', 'truth')
            questions = questions_truth.copy()
            mode = 'truth'
        if order[trials_instruct_quest.thisN] == 2:
            instructions_text2.text  = "In the following, you will be asked personal questions.\n \nYou can choose to lie or tell the truth! \n \nPress 'space' to start"
            thisExp.addData('questions.instructions', 'choice')
            questions = questions_choice.copy()
            trials_limit = 40
            mode = 'choice'

        random.shuffle(questions)
        #print(questions)
    CodeComponent eyecode_3
      Code Type = Auto->JS
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      Begin Routine:
        # some datastorages

        baseline_s = []
        eye_measures = []
        key_s = []
        id_s = []
        correct_s = []
  Routine QuestionsTest
    TextComponent press_key2
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = "←" No         Yes "→" 
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    TextComponent question
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent select_question
      Code Type = Auto->JS
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      Begin Routine:
        # get question to display on screen
        num_quest = trials_quest.thisN
        question.text = str(questions[num_quest][1])

        # write selected question to data
        thisExp.addData('question.id', questions[num_quest][0])
    KeyboardComponent question_response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10.0
      syncScreenRefresh = False
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    PolygonComponent timer_line2
      fillColor = white
      lineWidth = 10
      pos = (0, -0.35)
      saveStartStop = False
      shape = line
      size = (1,0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent timer_2
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine = True
        # configure visual timer
        time = 10
        #timer = core.CountdownTimer(time)

        # size of line
        timer_line2.size = [1,0.02]
        width = timer_line2.size[0]

        # how much the line shrinks each frame
        dist = width/(30*time)
        timer_line2.autoDraw= False
      Each Frame:
        #while timer.getTime() > 0 and continueRoutine:
            # adjust line size to visualize time
        width -= dist
        timer_line2.size = [width,0.02]
        timer_line2.draw()

        """
        # check if response was given
        keys = event.getKeys()
        if keys:
            if 'right' in keys:
                continueRoutine = False
            if 'left' in keys:
                continueRoutine = False
        """
        win.flip()
      End Routine:
        # if trials max is 20 end early
        if trials_quest.thisN >= (trials_limit-1):
            trials_quest.finished = True
    CodeComponent eyecode_4
      Code Type = Auto->JS
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      Each Frame:
        # eyetracking, append baseline measures with new pupil diameter
        if(global_gaze_data != None):
            #print(global_gaze_data.get('left_pupil_diameter'))
            eye_measures.append(global_gaze_data.get('left_pupil_diameter'))
            #time_stamps.append(dt.utcnow())
            #print(global_gaze_data.get('left_pupil_diameter'))
            baseline_s.append('')


            if question_response.keys:
                #correct_s.append(arrow_response.corr)
                correct_s.append('')
                key_s.append(question_response.keys)
            else:
                correct_s.append('')
                key_s.append('')

            id_s.append(questions[num_quest][0])
  Routine End
    TextComponent end
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating!
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    CodeComponent end_tracking_code
      Code Type = Auto->JS
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      End Routine:
        # start eyetracking
        eye_tracker.unsubscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
  Routine Save_Data
    CodeComponent save_code
      Code Type = Auto->JS
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      Begin Routine:
        import math
        #save pupil data

        #stimuli_data = [s - bs_diameter if math.isnan(s) == False else s for s in stimuli_measures]

        workbook = xl.Workbook('data/' + str(user) + '_LieDetection_' + exp_time + '_' + option + '_' + mode  +'.xlsx')
        ws = workbook.add_worksheet()

        ws.write('A1', 'pupil_dilation')
        ws.write('B1', 'baseline')
        ws.write('C1', 'num/id')
        ws.write('D1', 'key')
        ws.write('E1', 'correct')


        row = 1
        for sd in eye_measures:
            i = eye_measures.index(sd)
            #time = time_stamps[eye_measures.index(sd)]
            if math.isnan(sd) == True :
                ws.write(row, 0, 'Nan')
            else:
                ws.write(row, 0, sd)
            ws.write(row, 1, str(baseline_s[i]))
            ws.write(row, 2, str(id_s[i]))
            ws.write(row, 3, str(key_s[i]))
            ws.write(row, 4, str(correct_s[i]))
            row += 1

        workbook.close()

        # reset eye data for next cond
        eye_measures = []
        baseline_s = []
        eye_measures = []
        key_s= []
        id_s = []
        correct_s = []

        #print(expInfo['arrow_response.keys'])
Flow
  Routine Start
  LoopInitiator trials_instruct_num loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine Instructions
    LoopInitiator trials_num loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine Baseline
      Routine NumberTest
    LoopTerminator trials_num
    Routine Save_Data
  LoopTerminator trials_instruct_num
  LoopInitiator trials_instruct_quest loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine Instructions_Quest
    LoopInitiator trials_quest loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine Baseline
      Routine QuestionsTest
    LoopTerminator trials_quest
    Routine Save_Data
  LoopTerminator trials_instruct_quest
  Routine End
